<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q2="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:q1="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="NestedWorkflow">
        <Name>doors_down</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:SerialStringWrite">
                <q1:PortName>COM4</q1:PortName>
                <q1:NewLine>\n</q1:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>-1,-2,-3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:SerialStringWrite">
                <q1:PortName>COM3</q1:PortName>
                <q1:NewLine>\n</q1:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>-1,-2,-3,-4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>doors_up</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:SerialStringWrite">
                <q1:PortName>COM4</q1:PortName>
                <q1:NewLine>\n</q1:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>1,2,3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:SerialStringWrite">
                <q1:PortName>COM3</q1:PortName>
                <q1:NewLine>\n</q1:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>1,2,3,4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:KeyDown">
          <q2:Filter>Down</q2:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:KeyDown">
          <q2:Filter>Up</q2:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:KeyDown">
          <q2:Filter>Left</q2:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:KeyDown">
          <q2:Filter>Right</q2:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>opn_left_valve</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:SerialStringWrite">
                <q1:PortName>COM4</q1:PortName>
                <q1:NewLine>\n</q1:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>-10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT5S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>opn_right_valve</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:SerialStringWrite">
                <q1:PortName>COM4</q1:PortName>
                <q1:NewLine>\n</q1:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT5S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>2</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.IO.SerialStringWrite, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>