<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q3="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="NestedWorkflow">
              <Name>prepare_restart</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:SerialStringWrite">
                      <q1:NewLine>\r\n</q1:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SkipUntil" />
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>cls_rew_acc</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:SerialStringWrite">
                      <q1:NewLine>\r\n</q1:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SkipUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Merge" />
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>left_return</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="q2:ExpressionCondition">
                    <q2:Expression>it == True</q2:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:RoiActivityDetected">
                      <q3:Index>5</q3:Index>
                      <q3:Threshold>1000</q3:Threshold>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>right_return</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="q2:ExpressionCondition">
                    <q2:Expression>it == True</q2:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:RoiActivityDetected">
                      <q3:Index>6</q3:Index>
                      <q3:Threshold>3000</q3:Threshold>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>disp_reward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:SerialStringWrite">
                      <q1:NewLine>\n</q1:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>disp_reward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:SerialStringWrite">
                      <q1:NewLine>\n</q1:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SkipUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SkipUntil" />
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>left_turn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="q2:ExpressionCondition">
                    <q2:Expression>it == True</q2:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:RoiActivityDetected">
                      <q3:Index>1</q3:Index>
                      <q3:Threshold>1000</q3:Threshold>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>prevent_return</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:SerialStringWrite">
                      <q1:NewLine>\r\n</q1:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>right_turn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="q2:ExpressionCondition">
                    <q2:Expression>it == True</q2:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:RoiActivityDetected">
                      <q3:Index>2</q3:Index>
                      <q3:Threshold>1000</q3:Threshold>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SkipUntil" />
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>central_corr</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="q2:ExpressionCondition">
                    <q2:Expression>it == True</q2:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:RoiActivityDetected">
                      <q3:Index>4</q3:Index>
                      <q3:Threshold>3000</q3:Threshold>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>o_start_dr</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:SerialStringWrite">
                      <q1:NewLine>\r\n</q1:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>start</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="q2:ExpressionCondition">
                    <q2:Expression>it == True</q2:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:RoiActivityDetected">
                      <q3:Index>0</q3:Index>
                      <q3:Threshold>1000</q3:Threshold>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>rois</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:RoiActivity">
                      <q3:Regions>
                        <q3:ArrayOfPoint>
                          <q3:Point>
                            <q3:X>266</q3:X>
                            <q3:Y>335</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>332</q3:X>
                            <q3:Y>335</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>332</q3:X>
                            <q3:Y>389</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>266</q3:X>
                            <q3:Y>389</q3:Y>
                          </q3:Point>
                        </q3:ArrayOfPoint>
                        <q3:ArrayOfPoint>
                          <q3:Point>
                            <q3:X>148</q3:X>
                            <q3:Y>104</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>218</q3:X>
                            <q3:Y>104</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>218</q3:X>
                            <q3:Y>144</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>148</q3:X>
                            <q3:Y>144</q3:Y>
                          </q3:Point>
                        </q3:ArrayOfPoint>
                        <q3:ArrayOfPoint>
                          <q3:Point>
                            <q3:X>390</q3:X>
                            <q3:Y>104</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>464</q3:X>
                            <q3:Y>104</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>464</q3:X>
                            <q3:Y>148</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>390</q3:X>
                            <q3:Y>148</q3:Y>
                          </q3:Point>
                        </q3:ArrayOfPoint>
                        <q3:ArrayOfPoint>
                          <q3:Point>
                            <q3:X>71</q3:X>
                            <q3:Y>103</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>115</q3:X>
                            <q3:Y>103</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>115</q3:X>
                            <q3:Y>145</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>71</q3:X>
                            <q3:Y>145</q3:Y>
                          </q3:Point>
                        </q3:ArrayOfPoint>
                        <q3:ArrayOfPoint>
                          <q3:Point>
                            <q3:X>514</q3:X>
                            <q3:Y>107</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>558</q3:X>
                            <q3:Y>107</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>558</q3:X>
                            <q3:Y>149</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>514</q3:X>
                            <q3:Y>149</q3:Y>
                          </q3:Point>
                        </q3:ArrayOfPoint>
                        <q3:ArrayOfPoint>
                          <q3:Point>
                            <q3:X>66</q3:X>
                            <q3:Y>215</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>98</q3:X>
                            <q3:Y>215</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>98</q3:X>
                            <q3:Y>270</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>66</q3:X>
                            <q3:Y>270</q3:Y>
                          </q3:Point>
                        </q3:ArrayOfPoint>
                        <q3:ArrayOfPoint>
                          <q3:Point>
                            <q3:X>525</q3:X>
                            <q3:Y>208</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>557</q3:X>
                            <q3:Y>208</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>557</q3:X>
                            <q3:Y>263</q3:Y>
                          </q3:Point>
                          <q3:Point>
                            <q3:X>525</q3:X>
                            <q3:Y>263</q3:Y>
                          </q3:Point>
                        </q3:ArrayOfPoint>
                      </q3:Regions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:FindContours">
                      <q3:Mode>External</q3:Mode>
                      <q3:Method>ChainApproxNone</q3:Method>
                      <q3:Offset>
                        <q3:X>0</q3:X>
                        <q3:Y>0</q3:Y>
                      </q3:Offset>
                      <q3:MinArea>5</q3:MinArea>
                      <q3:MaxArea>700</q3:MaxArea>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:DrawContours">
                      <q3:MaxLevel>1</q3:MaxLevel>
                      <q3:Thickness>-1</q3:Thickness>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:Flip">
                      <q3:Mode>Vertical</q3:Mode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:Grayscale" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:Threshold">
                      <q3:ThresholdValue>100</q3:ThresholdValue>
                      <q3:MaxValue>255</q3:MaxValue>
                      <q3:ThresholdType>BinaryInv</q3:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q3:Flip">
                      <q3:Mode>Horizontal</q3:Mode>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>8</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:CameraCapture">
                <q3:Index>0</q3:Index>
                <q3:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>24</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>11</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>12</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>16</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>16</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>19</From>
              <To>18</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>20</From>
              <To>19</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>21</From>
              <To>20</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>21</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>21</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>23</From>
              <To>22</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>start_flow</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>start_flow</Name>
      </Expression>
      <Expression xsi:type="q2:ExpressionCondition">
        <q2:Expression>it</q2:Expression>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>prepare_doors</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:SerialStringWrite">
                <q1:NewLine>\r\n</q1:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>start_flow</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>start_flow</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.IO.SerialStringWrite, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SkipUntil, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Merge, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionCondition, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivityDetected, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivity, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.DrawContours, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Flip, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.CameraCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>